PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = SocialNormsTask
  Screen = 1
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Routines
  Routine Stimulus
    ImageComponent Norm_Stimulus
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      image [set every repeat] = PictureStimulus
      size = (0.5, 0.5)
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  Routine Jitter
    ImageComponent Jitter_Cross
      durationEstim = 1.5
      startVal [time (s)] = 0.0
      image = images/Jitter
      size = (2, 2)
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  Routine Norm_Feedback
    TextComponent Feedback_Question
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3.0
      pos = (0, 100)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        Any text

        including line breaks
    ImageComponent Keypad_Screen
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      image = Norm Feedback.jpg
      size = (1, 1)
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    KeyboardComponent Keypad_Input
      stopVal [duration (s)] = 3.0
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1', '2', '3', '4'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Norm_Response
    ImageComponent Stimulus_With_Norm
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      image = PictureStimulus
      size = (0.5, 0.5)
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    TextComponent Norm_Statistic
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
Flow
  LoopInitiator Norm_Trials loopType="TrialHandler"
    conditionsFile = NormsTaskConditions.xlsx
    isTrials = False
    loopType = random
    nReps = 72
    conditions = []
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    Routine Stimulus
    Routine Norm_Feedback
    Routine Norm_Response
    Routine Jitter
  LoopTerminator Norm_Trials
